PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Solo Project
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        You will see four circles appear on the screen.
        One of them will turn GREEN.

        Press the key (F, G, H, or J) that matches
        the position of the GREEN circle as quickly
        and accurately as possible.

        In the later part of the task, other coloured
        circles will also appear. Ignore them and
        respond ONLY to the GREEN circle.

        Press space to start.
    KeyboardComponent start_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random

        for b in [circle1, circle2, circle3, circle4]:
            b.fillColor = 'grey'

        if lightbox == 1:
            target_circle = circle1
        elif lightbox == 2:
            target_circle = circle2
        elif lightbox == 3:
            target_circle = circle3
        elif lightbox == 4:
            target_circle = circle4

        target_circle.fillColor = 'green'

        if trials.thisN >= 80:
            distractor_colors = ['red', 'blue', 'yellow']
            for b in [circle1, circle2, circle3, circle4]:
                if b != target_circle:
                    b.fillColor = random.choice(distractor_colors)
      End Routine:
        if resp.corr == 1:
            thisExp.addData('accuracy', 1)
        else:
            thisExp.addData('accuracy', 0)
    PolygonComponent fixation
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = 0.0039, 0.0039, 0.0039
      shape = triangle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      units = pix
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    PolygonComponent circle1
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.45, 0)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 1.0
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    PolygonComponent circle2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-0.15, 0)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 1.0
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    PolygonComponent circle3
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.15, 0)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 1.0
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    PolygonComponent circle4
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0.45, 0)
      shape = circle
      size = (0.15, 0.15)
      startVal [time (s)] = 1.0
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    KeyboardComponent resp
      allowedKeys [set every repeat] = 'f','g','h','j'
      correctAns = $correctkey
      forceEndRoutine = True
      startVal [time (s)] = 0.1
      storeCorrect = True
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  Routine thanks
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    TextComponent thank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating!
        Your responses have been recorded.
        Press SPACE to exit.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sequence.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('trials', np.int64(1)), ('lightbox', np.int64(4)), ('correctkey', 'f'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(2)), ('lightbox', np.int64(2)), ('correctkey', 'g'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(3)), ('lightbox', np.int64(1)), ('correctkey', 'h'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(4)), ('lightbox', np.int64(3)), ('correctkey', 'j'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(5)), ('lightbox', np.int64(3)), ('correctkey', 'f'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(6)), ('lightbox', np.int64(4)), ('correctkey', 'g'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(7)), ('lightbox', np.int64(4)), ('correctkey', 'h'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(8)), ('lightbox', np.int64(2)), ('correctkey', 'j'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(9)), ('lightbox', np.int64(1)), ('correctkey', 'f'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(10)), ('lightbox', np.int64(1)), ('correctkey', 'g'), ('trialtype', 'learn'), ('block', np.int64(1))]),
      OrderedDict([('trials', np.int64(11)), ('lightbox', np.int64(2)), ('correctkey', 'h'), ('trialtype', 'learn'), ('block', np.int64(1))])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
    Routine trial
  LoopTerminator trials
  Routine thanks
