PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1280, 720]
  expName = Tutorial 5
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_word
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/Study Word.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'phone'},
      {'study_word': 'marble'},
      {'study_word': 'board'},
      {'study_word': 'laptop'},
      {'study_word': 'chart'},
      {'study_word': 't-shirt'},
      {'study_word': 'mouse'},
      {'study_word': 'pastry'},
      {'study_word': 'case'},
      {'study_word': 'cruise'},
      {'study_word': 'police '},
      {'study_word': 'keys'},
      {'study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = data/Test Words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'reference': 'laptop', 'old_new': 'old '},
      {'test_word': '_ha_t', 'reference': 'chart', 'old_new': 'old '},
      {'test_word': 't_hi_t', 'reference': 'tshirt', 'old_new': 'old '},
      {'test_word': '_ou_se', 'reference': 'mouse', 'old_new': 'old '},
      {'test_word': '_as_ry', 'reference': 'pastry', 'old_new': 'old '},
      {'test_word': 'c_a_e', 'reference': 'case', 'old_new': 'old '},
      {'test_word': '_ru_s_', 'reference': 'cruise', 'old_new': 'old '},
      {'test_word': 'p_li_c_', 'reference': 'police', 'old_new': 'old '},
      {'test_word': 'k_y_', 'reference': 'keys', 'old_new': 'old '},
      {'test_word': 'p_st_r', 'reference': 'poster', 'old_new': 'old '},
      {'test_word': '_oa_d ', 'reference': 'board', 'old_new': 'old '},
      {'test_word': '_a_bl_', 'reference': 'marble', 'old_new': 'old '},
      {'test_word': '_ho_e', 'reference': 'phone', 'old_new': 'old '},
      {'test_word': '_oo_', 'reference': 'book', 'old_new': 'old '},
      {'test_word': 'c_sh_o_', 'reference': 'cushion', 'old_new': 'old '},
      {'test_word': 't__le', 'reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'reference': 'vase', 'old_new': 'new'},
      {'test_word': 'b_t_le', 'reference': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_r_', 'reference': 'camera ', 'old_new': 'new'}]
    Routine test
  LoopTerminator trials_2
