PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Tutorial 6
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days" 
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = discounting.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', np.int64(8)), ('future_reward', np.int64(14)), ('delay', np.int64(7))]),
      OrderedDict([('reward_today', np.int64(10)), ('future_reward', np.int64(16)), ('delay', np.int64(7))]),
      OrderedDict([('reward_today', np.int64(12)), ('future_reward', np.int64(17)), ('delay', np.int64(12))]),
      OrderedDict([('reward_today', np.int64(14)), ('future_reward', np.int64(20)), ('delay', np.int64(17))]),
      OrderedDict([('reward_today', np.int64(16)), ('future_reward', np.int64(28)), ('delay', np.int64(17))]),
      OrderedDict([('reward_today', np.int64(18)), ('future_reward', np.int64(28)), ('delay', np.int64(23))]),
      OrderedDict([('reward_today', np.int64(20)), ('future_reward', np.int64(35)), ('delay', np.int64(26))]),
      OrderedDict([('reward_today', np.int64(22)), ('future_reward', np.int64(31)), ('delay', np.int64(32))]),
      OrderedDict([('reward_today', np.int64(24)), ('future_reward', np.int64(37)), ('delay', np.int64(31))]),
      OrderedDict([('reward_today', np.int64(25)), ('future_reward', np.int64(41)), ('delay', np.int64(35))]),
      OrderedDict([('reward_today', np.int64(27)), ('future_reward', np.int64(36)), ('delay', np.int64(43))]),
      OrderedDict([('reward_today', np.int64(29)), ('future_reward', np.int64(46)), ('delay', np.int64(43))]),
      OrderedDict([('reward_today', np.int64(31)), ('future_reward', np.int64(37)), ('delay', np.int64(46))]),
      OrderedDict([('reward_today', np.int64(33)), ('future_reward', np.int64(58)), ('delay', np.int64(52))])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
    Routine trial
  LoopTerminator trials
